/gate/source/addSource LidA

/gate/source/LidA/setActivity 1.313 microcurie
/gate/source/LidA/setType backtoback
/gate/source/LidA/gps/particle gamma
/gate/source/LidA/gps/energytype Mono
/gate/source/LidA/gps/monoenergy 0.511 MeV

/gate/source/LidA/gps/type Volume
/gate/source/LidA/gps/shape Cylinder
/gate/source/LidA/gps/radius 4. mm
/gate/source/LidA/gps/halfz 19.05 mm

/gate/source/LidA/gps/centre -17.062 56.774 0 mm



/gate/source/addSource LidB

/gate/source/LidB/setActivity 2.955 microcurie
/gate/source/LidB/setType backtoback
/gate/source/LidB/gps/particle gamma
/gate/source/LidB/gps/energytype Mono
/gate/source/LidB/gps/monoenergy 0.511 MeV

/gate/source/LidB/gps/type Volume
/gate/source/LidB/gps/shape Cylinder
/gate/source/LidB/gps/radius 6. mm
/gate/source/LidB/gps/halfz 19.05 mm

/gate/source/LidB/gps/centre 9.855 57.803 0 mm



/gate/source/addSource LidC

/gate/source/LidC/setActivity 5.254 microcurie
/gate/source/LidC/setType backtoback
/gate/source/LidC/gps/particle gamma
/gate/source/LidC/gps/energytype Mono
/gate/source/LidC/gps/monoenergy 0.511 MeV

/gate/source/LidC/gps/type Volume
/gate/source/LidC/gps/shape Cylinder
/gate/source/LidC/gps/radius 8. mm
/gate/source/LidC/gps/halfz 19.05 mm

/gate/source/LidC/gps/centre 38.241 40.301 0 mm



/gate/source/addSource LidD

/gate/source/LidD/setActivity 12.826 microcurie
/gate/source/LidD/setType backtoback
/gate/source/LidD/gps/particle gamma
/gate/source/LidD/gps/energytype Mono
/gate/source/LidD/gps/monoenergy 0.511 MeV

/gate/source/LidD/gps/type Volume
/gate/source/LidD/gps/shape Cylinder
/gate/source/LidD/gps/radius 12.5 mm
/gate/source/LidD/gps/halfz 19.05 mm

/gate/source/LidD/gps/centre 52.067 -7.648 0 mm



/gate/source/addSource LidE

/gate/source/LidE/setActivity 12.826 microcurie
/gate/source/LidE/setType backtoback
/gate/source/LidE/gps/particle gamma
/gate/source/LidE/gps/energytype Mono
/gate/source/LidE/gps/monoenergy 0.511 MeV

/gate/source/LidE/gps/type Volume
/gate/source/LidE/gps/shape Cylinder
/gate/source/LidE/gps/radius 12.5 mm
/gate/source/LidE/gps/halfz 19.05 mm

/gate/source/LidE/gps/centre -34.417 -45.301 0 mm



/gate/source/addSource LidF

/gate/source/LidF/setActivity 12.826 microcurie
/gate/source/LidF/setType backtoback
/gate/source/LidF/gps/particle gamma
/gate/source/LidF/gps/energytype Mono
/gate/source/LidF/gps/monoenergy 0.511 MeV

/gate/source/LidF/gps/type Volume
/gate/source/LidF/gps/shape Cylinder
/gate/source/LidF/gps/radius 12.5 mm
/gate/source/LidF/gps/halfz 19.05 mm

/gate/source/LidF/gps/centre -60.304 3.824 0 mm





/gate/source/addSource Background

/gate/source/Background/setActivity 1.5 mCi
/gate/source/Background/gps/particle gamma
/gate/source/Background/gps/energytype Mono
/gate/source/Background/setType backtoback
/gate/source/Background/gps/type Volume
/gate/source/Background/gps/shape Cylinder
/gate/source/Background/gps/radius 104.5 mm
/gate/source/Background/gps/halfz 93. mm
# z coord is 19.05 mm - 93 mm = -73.95 mm
/gate/source/Background/gps/centre 0 0 -73.95 mm
/gate/source/Background/gps/monoenergy 0.511 MeV
/gate/source/Background/gps/angtype iso


/gate/world/daughters/name bgcyl
/gate/world/daughters/insert cylinder
/gate/bgcyl/vis/setColor magenta
/gate/bgcyl/geometry/setRmax 104.5 mm
/gate/bgcyl/geometry/setHeight 186 mm
/gate/bgcyl/setMaterial Water
/gate/bgcyl/placement/setTranslation  0 0 -73.95 mm
/gate/bgcyl/vis/forceWireframe

/gate/bgcyl/daughters/name cold_area1
/gate/bgcyl/daughters/insert cylinder
/gate/cold_area1/vis/setColor green
/gate/cold_area1/geometry/setRmax 4. mm
/gate/cold_area1/geometry/setHeight 38.1 mm
/gate/cold_area1/setMaterial Water
/gate/cold_area1/placement/setTranslation  -17.062 56.774 73.95 mm
/gate/cold_area1/vis/forceSolid

/gate/bgcyl/daughters/name cold_area2
/gate/bgcyl/daughters/insert cylinder
/gate/cold_area2/vis/setColor green
/gate/cold_area2/geometry/setRmax 6. mm
/gate/cold_area2/geometry/setHeight 38.1 mm
/gate/cold_area2/setMaterial Water
/gate/cold_area2/placement/setTranslation  9.855 57.803 73.95 mm
/gate/cold_area2/vis/forceSolid

/gate/bgcyl/daughters/name cold_area3
/gate/bgcyl/daughters/insert cylinder
/gate/cold_area3/vis/setColor green
/gate/cold_area3/geometry/setRmax 8. mm
/gate/cold_area3/geometry/setHeight 38.1 mm
/gate/cold_area3/setMaterial Water
/gate/cold_area3/placement/setTranslation  38.241 40.301 73.95 mm
/gate/cold_area3/vis/forceSolid

/gate/bgcyl/daughters/name cold_area4
/gate/bgcyl/daughters/insert cylinder
/gate/cold_area4/vis/setColor green
/gate/cold_area4/geometry/setRmax 12.5 mm
/gate/cold_area4/geometry/setHeight 38.1 mm
/gate/cold_area4/setMaterial Water
/gate/cold_area4/placement/setTranslation  52.067 -7.648 73.95 mm
/gate/cold_area4/vis/forceSolid

/gate/bgcyl/daughters/name cold_area5
/gate/bgcyl/daughters/insert cylinder
/gate/cold_area5/vis/setColor green
/gate/cold_area5/geometry/setRmax 12.5 mm
/gate/cold_area5/geometry/setHeight 38.1 mm
/gate/cold_area5/setMaterial Water
/gate/cold_area5/placement/setTranslation  -34.417 -45.301 73.95 mm
/gate/cold_area5/vis/forceSolid

/gate/bgcyl/daughters/name cold_area6
/gate/bgcyl/daughters/insert cylinder
/gate/cold_area6/vis/setColor green
/gate/cold_area6/geometry/setRmax 12.5 mm
/gate/cold_area6/geometry/setHeight 38.1 mm
/gate/cold_area6/setMaterial Water
/gate/cold_area6/placement/setTranslation  -60.304 3.824 73.95 mm
/gate/cold_area6/vis/forceSolid

# Reinitialize to allow use of new volumes
/gate/run/initialize

/gate/source/Background/gps/Forbid cold_area1
/gate/source/Background/gps/Forbid cold_area2
/gate/source/Background/gps/Forbid cold_area3
/gate/source/Background/gps/Forbid cold_area4
/gate/source/Background/gps/Forbid cold_area5
/gate/source/Background/gps/Forbid cold_area6

